PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1090, 800)
  color = $(0.6549, 0.6549, 0.6549)
  expName = untitled_FINAL_NEWEST
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    CodeComponent label_opacity
      Code Type = Auto->JS
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      Begin Routine:
        if etykieta == "test":
            label_text.text = ""  # Czyści treść, nic się nie wyświetli
            label_text.opacity = 0 # Na wszelki wypadek pełna przezroczystość
        else:
            label_text.text = etykieta # Przywraca tekst z Excela
            label_text.opacity = 1
    CodeComponent mouse_visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    TextComponent label_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $show_label
      wrapWidth = 1.3
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      text [set every repeat]:
        $etykieta
    ImageComponent stim_image
      image [set every repeat] = $image_path
      size = (0.75, 0.75)
      startVal [time (s)] = $show_label + 0.65
      stopVal [duration (s)] = 1.2
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    SliderComponent suwak_badanie
      borderColor = $(-1.0000, -1.0000, -1.0000)
      color = $(-1.0000, 1.0000, 1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      pos = (0, -0.5)
      size = (1, 0.1)
      startVal [time (s)] = $show_label+1.85
      styles = slider
      ticks = (-50,-12.5, -25, -37.5, 0, 12.5, 25, 37.5, 50)
      units = norm
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    TextComponent lewa_etykieta
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.085
      pos = [-0.65, -0.5]
      startVal [time (s)] = $show_label+1.85
      text [set every repeat] = $left_label
      units = norm
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    TextComponent prawa_etykieta
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.085
      pos = [0.65, -0.5]
      startVal [time (s)] = $show_label+1.85
      text [set every repeat] = $right_label
      units = norm
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    TextComponent fiksacja1
      color = $(-1.0000, -1.0000, -1.0000)
      disabled = True
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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    TextComponent fiksacja2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = $show_label + 0.2
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent pytanie
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = $show_label+1.85
      text = Jaką emocję wyrażała ta twarz?
      units = norm
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  Routine instrukcja
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    CodeComponent mouse_visible_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    KeyboardComponent spacja_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Zanim rozpocznie się eksperyment, dokładnie zapoznaj się z instrukcją poniżej.

        Twoim zadaniem będzie ocena serii zdjęć przedstawiających ludzkie twarze. Ocena będzie wymagać od Ciebie zdecydowania, jaką emocję dostrzegasz na danej twarzy oraz w jakim stopniu (wyrażonym w procentach) ta emocja jest nasilona.

          -  Każdą próbę rozpocznie znak +. W tym momencie skup wzrok na środku ekranu.

          -  Przed zdjęciem pojawi się krótka informacja o wynikach wcześniejszych analiz dotyczących ekspresji emocji danej twarzy. Będą to dane dostarczone przez zaawansowany model Sztucznej Inteligencji lub uśrednione wyniki uzyskane od poprzednich uczestników badania. W niektórych przypadkach żadna dodatkowa informacja nie zostanie wyświetlona i od razu przejdziesz do widoku twarzy.

          -  Zdjęcie twarzy pojawi się tylko na krótką chwilę. Polegaj na swojej intuicji i pierwszym wrażeniu.

        Pamiętaj: nie ma złych odpowiedzi. Liczy się Twoja subiektywna ocena.

        Na następnym ekranie zostaniesz zaznajomiony z wyglądem i użyciem suwaka.



        Aby przejść dalej, naciśnij [SPACJA].
  Routine demo_suwaka
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    CodeComponent mouse_visible_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    TextComponent suwak_info
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Po zniknięciu zdjęcia na ekranie pojawi się suwak, a na jego krańcach dwie emocje. Twoim zadaniem jest przesunięcie czerwonego wskaźnika w miejsce, które najlepiej oddaje proporcję emocji dostrzeżonych na twarzy. Nakieruj na wskażnik kursorem oraz przytrzymaj lewy przycisk myszy, by wybrać odpowiednie miejsce na suwaku.

        UWAGA: przesunięcie i puszczenie suwaka automatycznie prześle Twoją odpowiedź.


        Pozycję suwaka oznaczoną numerem 1 należy interpetować jako wskazanie ~80% radości i ~20% smutku.

        Pozycję suwaka oznaczonego numerem 2 należy interpretować jako wskazanie ~40% radości i ~60% smutku.

        Pozycję suwaka oznaczonego numerem 3 należy intepretować jako wskanie 50% radości i 50% smutku.

        Aby przejść dalej, naciśnij [SPACJA].
    KeyboardComponent spacja_suwak
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine info_trening
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    KeyboardComponent spacja_trening
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent mouse_visible_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    TextComponent proba_testowa
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Próba treningowa

        Zanim rozpocznie się właściwy eksperyment, zapraszamy do wykonania krótkiej próby treningowej. Ma ona charakter wyłącznie instruktażowy i pozwoli Ci przećwiczyć obsługę interaktywnego suwaka oraz zapoznać się z tempem zadania. Wynik tej części nie jest brany pod uwagę w końcowych wynikach badania.

        W ramach treningu zobaczysz jedną twarz, którą należy następnie ocenić, przesuwając suwak w odpowiednie miejsce na skali pomiędzy dwiema emocjami. Pamiętaj, aby polegać na swoim pierwszym wrażeniu.

        Jeśli jesteś gotowy, naciśnij przycisk [SPACJA], aby rozpocząć.
  Routine trial_trening
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    CodeComponent mouse_visible_5
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    TextComponent pilot_label_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 3
      wrapWidth = 1.3
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      text [set every repeat]:
        Model AI wykrył w tej twarzy 80% smutku.
    TextComponent pilot_fiksacja1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    SliderComponent pilot_suwak
      borderColor = $(-1.0000, -1.0000, -1.0000)
      color = $(-1.0000, 1.0000, 1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      pos = (0, -0.5)
      size = (1, 0.1)
      startVal [time (s)] = 5.5
      styles = slider
      ticks = (-50,-12.5, -25, -37.5, 0, 12.5, 25, 37.5, 50)
      units = norm
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    TextComponent pilot_fiksacja2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 3.9
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent pilot_pytanie
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      text = Jaką emocję wyrażała ta twarz?
      units = norm
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    TextComponent pilot_lewa_etykieta
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.085
      pos = [-0.6, -0.5]
      startVal [time (s)] = 5.5
      text [set every repeat] = radość
      units = norm
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    TextComponent pilot_prawa_etykieta
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.085
      pos = [0.6, -0.5]
      startVal [time (s)] = 5.5
      text [set every repeat] = smutek
      units = norm
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    ImageComponent pilot_stim_image
      image = photos/twarz_testowa.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 4.6
      stopVal [duration (s)] = 0.9
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  Routine koniec_treningu
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    CodeComponent mouse_visible_6
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
    KeyboardComponent spacja_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_badania
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.4
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      text:
        Koniec treningu

        Przechodzimy do właściwej części badania, które składa się z 4 bloków po 8 twarzy. Pomiędzy kolejnymi blokami ustanowiono przerwę.

        Od teraz Twoje odpowiedzi będą rejestrowane. Pamiętaj o skupieniu na punkcie fiksacji i poleganiu na pierwszym wrażeniu.

        Naciśnij przycisk [SPACJA], aby rozpocząć.
  Routine podziekowanie
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    TextComponent podziekowania_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        To już wszystko. Dziękujemy za udział w eksperymencie!
        Ewentualne pytania oraz uwagi prosimy kierować na adres: Julia Koc, julkoc5@st.amu.edu.pl
  Routine przerwa
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    TextComponent przerwa_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Czas na krótką przerwę. Odpocznij chwilę i naciśnij [SPACJA], aby kontynuować.
      units = norm
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    KeyboardComponent spacja_przerwa
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent licznik
      Code Type = Auto->JS
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      Begin Experiment:
        trial_count=0
      Begin Routine:
        trial_count += 1

        if trial_count == 1 or (trial_count - 1) % 8 != 0:
            continueRoutine = False
  Routine test_textbox
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    TextboxComponent textbox
      alignment = top-center
      bold = False
      color = $(-1.0000, -1.0000, -1.0000)
      editable = False
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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      text:
        Zanim rozpocznie się eksperyment, dokładnie zapoznaj się z instrukcją poniżej.

        Twoim zadaniem będzie ocena serii zdjęć przedstawiających ludzkie twarze. Ocena będzie wymagać od Ciebie zdecydowania, jaką emocję dostrzegasz na danej twarzy oraz w jakim stopniu (wyrażonym w procentach) ta emocja jest nasilona.

          -  Każdą próbę rozpocznie znak +. W tym momencie skup wzrok na środku ekranu.

          -  Przed zdjęciem pojawi się krótka informacja o wynikach wcześniejszych analiz dotyczących ekspresji emocji danej twarzy. Będą to dane dostarczone przez zaawansowany model Sztucznej Inteligencji lub uśrednione wyniki uzyskane od poprzednich uczestników badania. W niektórych przypadkach żadna dodatkowa informacja nie zostanie wyświetlona i od razu przejdziesz do widoku twarzy.

          -  Zdjęcie twarzy pojawi się tylko na krótką chwilę. Polegaj na swojej intuicji i pierwszym wrażeniu.

        Pamiętaj: nie ma złych odpowiedzi. Liczy się Twoja subiektywna ocena.

        Na następnym ekranie zostaniesz zaznajomiony z wyglądem i użyciem suwaka.



        Aby przejść dalej, naciśnij [SPACJA].
  Routine pytanie_o_metryczke
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  Routine proba
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  Routine oddzielenie_triali
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.color='black'
      End Routine:
        win.color='lightgrey'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine instrukcja
  Routine demo_suwaka
  Routine info_trening
  Routine trial_trening
  Routine koniec_treningu
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'radość', 'right_label': 'smutek', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'strach', 'right_label': 'złość', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaufanie', 'right_label': 'wstręt', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaskoczenie', 'right_label': 'oczekiwanie', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'radość', 'right_label': 'smutek', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'strach', 'right_label': 'złość', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaufanie', 'right_label': 'wstręt', 'show_label': 1}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
    Routine przerwa
    Routine trial
    Routine oddzielenie_triali
  LoopTerminator trials
  Routine pytanie_o_metryczke
  Routine podziekowanie
